PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1440, 810]
  expName = Robot_Voice
  Experiment info = {u'session': u'001', u'participant': u''}
  Screen = 1
  Full-screen window = True
  Units = use prefs
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Routines
  Routine dummy
    TextComponent text
      text = How much do you like me
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      pos = (0, 0.8)
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    ImageComponent image_3
      size = (768/3,950/3)
      units = pix
      image [set every repeat] = $robot_1
      startVal [time (s)] = 0.0
      pos = (-750, 0)
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    ImageComponent image_5
      size = (768/3,950/3)
      units = pix
      image [set every repeat] = $robot_2
      startVal [time (s)] = 0.0
      pos = (500,0)
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    MouseComponent mouse
      stopVal [duration (s)] = 1.0
      saveMouseState = on click
      forceEndRoutineOnPress = any click
      timeRelativeTo = routine
      startVal [time (s)] = 0.0
      clickable = robot_1, robot_2
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  Routine trial
    TextComponent target
      letterHeight = 0.1
      startVal [time (s)] = 0.5
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      text [set every repeat]:
        $task_2
    KeyboardComponent response
      allowedKeys = 'left','right','down'
      correctAns = $corrAns
      startVal [time (s)] = 0.5
      forceEndRoutine = True
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    SoundComponent sound_1
      stopVal [duration (s)] = 6
      startVal [time (s)] = 0.0
      sound [set every repeat] = $task_2
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    ImageComponent image
      size = (768/3,950/3)
      units = pix
      image = robot_imgs/pepper
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      size = (768/3,950/3)
      units = pix
      image = robot_imgs/pr2
      startVal [time (s)] = 0.0
      pos = (-50-(768/3), 0)
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    ImageComponent image_4
      size = (768/3,950/3)
      units = pix
      image = robot_imgs/casper
      startVal [time (s)] = 0.0
      pos = ((50+768/3),0)
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  Routine instructions
    TextComponent instText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        What is your user code?
    KeyboardComponent key_resp_3
      startVal [time (s)] = 0.0
      forceEndRoutine = True
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Flow
  Routine instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    conditionsFile = sounds.xlsx
    nReps = 5
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    conditions:
      [OrderedDict([('task_1', 'sounds/pepper_sydney/sentence_04.wav'), ('task_1_raw', 1), ('task_1_duration', 2), ('robot_1', 'robot_imgs/stevie'), ('robot_2', 'robot_imgs/pepper')]),
      OrderedDict([('task_1', 'sounds/pepper_sydney/sentence_05.wav'), ('task_1_raw', 2), ('task_1_duration', 3), ('robot_1', 'robot_imgs/stevie'), ('robot_2', 'robot_imgs/pepper')]),
      OrderedDict([('task_1', 'sounds/pepper_sydney/sentence_06.wav'), ('task_1_raw', 1), ('task_1_duration', 2), ('robot_1', 'robot_imgs/stevie'), ('robot_2', 'robot_imgs/pepper')]),
      OrderedDict([('task_1', 'sounds/pepper_sydney/sentence_07.wav'), ('task_1_raw', 2), ('task_1_duration', 3), ('robot_1', 'robot_imgs/stevie'), ('robot_2', 'robot_imgs/pepper')]),
      OrderedDict([('task_1', 'sounds/pepper_sydney/sentence_08.wav'), ('task_1_raw', 1), ('task_1_duration', 2), ('robot_1', 'robot_imgs/stevie'), ('robot_2', 'robot_imgs/pepper')]),
      OrderedDict([('task_1', 'sounds/pepper_sydney/sentence_09.wav'), ('task_1_raw', 2), ('task_1_duration', 3), ('robot_1', 'robot_imgs/stevie'), ('robot_2', 'robot_imgs/pepper')]),
      OrderedDict([('task_1', 'sounds/pepper_sydney/sentence_10.wav'), ('task_1_raw', 2), ('task_1_duration', 3), ('robot_1', 'robot_imgs/stevie'), ('robot_2', 'robot_imgs/pepper')]),
      OrderedDict([('task_1', 'sounds/pepper_sydney/sentence_11.wav'), ('task_1_raw', 1), ('task_1_duration', 2), ('robot_1', 'robot_imgs/stevie'), ('robot_2', 'robot_imgs/pepper')])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
    Routine dummy
  LoopTerminator trials_2
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    conditionsFile = sounds.xlsx
    nReps = 1
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    conditions:
      [OrderedDict([('task_1', 'sounds/pepper_sydney/sentence_04.wav'), ('task_1_raw', 1), ('task_1_duration', 2), ('robot_1', 'robot_img/stevie'), ('robot_2', 'robot_img/pepper')]),
      OrderedDict([('task_1', 'sounds/pepper_sydney/sentence_05.wav'), ('task_1_raw', 2), ('task_1_duration', 3), ('robot_1', 'robot_img/stevie'), ('robot_2', 'robot_img/pepper')]),
      OrderedDict([('task_1', 'sounds/pepper_sydney/sentence_06.wav'), ('task_1_raw', 1), ('task_1_duration', 2), ('robot_1', 'robot_img/stevie'), ('robot_2', 'robot_img/pepper')]),
      OrderedDict([('task_1', 'sounds/pepper_sydney/sentence_07.wav'), ('task_1_raw', 2), ('task_1_duration', 3), ('robot_1', 'robot_img/stevie'), ('robot_2', 'robot_img/pepper')]),
      OrderedDict([('task_1', 'sounds/pepper_sydney/sentence_08.wav'), ('task_1_raw', 1), ('task_1_duration', 2), ('robot_1', 'robot_img/stevie'), ('robot_2', 'robot_img/pepper')]),
      OrderedDict([('task_1', 'sounds/pepper_sydney/sentence_09.wav'), ('task_1_raw', 2), ('task_1_duration', 3), ('robot_1', 'robot_img/stevie'), ('robot_2', 'robot_img/pepper')]),
      OrderedDict([('task_1', 'sounds/pepper_sydney/sentence_10.wav'), ('task_1_raw', 2), ('task_1_duration', 3), ('robot_1', 'robot_img/stevie'), ('robot_2', 'robot_img/pepper')]),
      OrderedDict([('task_1', 'sounds/pepper_sydney/sentence_11.wav'), ('task_1_raw', 1), ('task_1_duration', 2), ('robot_1', 'robot_img/stevie'), ('robot_2', 'robot_img/pepper')])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
    Routine trial
  LoopTerminator trials
